PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1200]
  expName = FontCognitiveLoad
  keyboardBackend = ioHub
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Routines
  Routine Introduction
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this experiment you will be given a few reading prompts written in different fonts. You will get a few practice rounds in which you will get familiar with the different fonts. Once you have finished we will begin the study. If you have any questions at this point or at any point throughout the experiment please feel free to ask.
        Hit the space bar when you're ready to start.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice_Instructions
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        We are about to start the practice round. You will see one example of each font for a total of 3 reading sections total. Please read each one and press the spacebar when you have finished reading.

        When you are ready to begin please press "y".
    KeyboardComponent key_resp_2
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice
    ImageComponent image
      image [set every repeat] = $main_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_3
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $main_name
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[1])
    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        outlet.push_sample(x=[1])
  Routine Rest
    TextComponent rest_block
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = Now please rest for 30 seconds.
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  Routine Intro_to_task
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Nice work! Now that you've had a chance to do the practice please feel free to ask any questions. If you don't have any questions we will get started on the main part of the experiment. For this section you will have six total reading assignments, two for each type of font. Please read them and press the spacebar when you have completed.

        When you are ready to start please press "y".
    KeyboardComponent key_resp_4
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Main_test
    ImageComponent main_stim_image
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent stim_type
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $name
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    KeyboardComponent next_image
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[marker])
    CodeComponent code_5
      Code Type = Auto->JS
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      End Routine:
        outlet.push_sample(x=[marker])
  Routine Restart_work
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Great, when you're ready to start again please press the spacebar.
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Fin
    TextComponent end_study
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = You're all done! Thank you for taking part in our research.
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  Routine Load_Triggers
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet
        info = StreamInfo(name="Trigger", type="Markers", channel_count=1, channel_format='int32', source_id="Aurora")
        outlet = StreamOutlet(info)
Flow
  Routine Load_Triggers
  Routine Introduction
  Routine Practice_Instructions
  LoopInitiator practice_trials loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = practice_loop.xlsx
    loopType = random
    nReps = 0
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    conditions:
      [{'main_name': 'bionic', 'main_image': 'Images/Practice/bionic_practice.png', 'marker': 1},
      {'main_name': 'sans forgetica', 'main_image': 'Images/Practice/sansforgetica_practice.png', 'marker': 1},
      {'main_name': 'times', 'main_image': 'Images/Practice/timesnewroman_practice.png', 'marker': 1},
      {'main_name': None, 'main_image': None, 'marker': None},
      {'main_name': None, 'main_image': None, 'marker': None}]
    Routine Practice
    Routine Rest
    Routine Restart_work
  LoopTerminator practice_trials
  Routine Intro_to_task
  LoopInitiator main_trials loopType="TrialHandler"
    conditionsFile = loopTemplate1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'name': 'bionic_1', 'image': 'Images/Main/bionic_1.png', 'marker': 2},
      {'name': 'bionic_2', 'image': 'Images/Main/bionic_2.png', 'marker': 2},
      {'name': 'sansforgetica_1', 'image': 'Images/Main/sansforgetica_1.png', 'marker': 3},
      {'name': 'sansforgetica_2', 'image': 'Images/Main/sansforgetica_2.png', 'marker': 3},
      {'name': 'times_1', 'image': 'Images/Main/times_1.png', 'marker': 4},
      {'name': 'times_2', 'image': 'Images/Main/times_2.png', 'marker': 4}]
    Routine Main_test
    Routine Rest
    Routine Restart_work
  LoopTerminator main_trials
  Routine Fin
